def model modules as
  // ------------module_units------------//
  def import using "3compartment_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit C_per_mol using unit C_per_mol;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit A_per_nanoA using unit A_per_nanoA;
    unit J_per_MK using unit J_per_MK;
    unit C_per_M using unit C_per_M;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_M_millis using unit m3_per_M_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
  enddef;

  def comp heart_Ca_input as
    // Warning this module should not be used if you are varying period, without also varying the T_ar, T_ac, T_vr, T_vc
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    // ______ (PETER) Delete from here __________
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless {pub: out};
    // var T_ar_norm: dimensionless {pub: out};
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless {pub: out};
    // var T_vr_norm: dimensionless {pub: out};
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    // _____ (PETER) TO here ______________
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // ____________ PETER DELETE FROM HERE ______________
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    // TODO update all heart models to have the below chi calculations, it is more numerically robust.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    // ____________ (PETER) TO HERE ______________
    // ____________ (PETER) These are the normalised elastance functions that need to be changed to be dependent of Ca
    // When e_v equals 1 elastance equals E_lv_B (min elastance), when e_v equals 1,  elastance equals E_lv_B+E_lv_A (max elastance).
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
  enddef;

  def comp vp_ven_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {init: q_C_init, pub: out};
    var q_C: m3 {pub: out};
    var q: m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: out};
    var Delta_q_us: m3 {pub: in};
    var Delta_C: m6_per_J {pub: in};
    var C_wCont: m6_per_J {pub: out};
    var v_inf: m3_per_s {pub: in};
    var sensitivity: m6_per_Js {pub: in};
    var f_ab: per_s {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v+v_inf;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
    C_wCont = C+Delta_C;
    Delta_C = f_ab*sensitivity;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_T_fixed_I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;
enddef;
